% # iA_PYso_B12:
%
% Fast A-type potassium current, for generic pyramidal soma compartments used
% in the DynaSim implementation of (Benita et al., 2012). The original paper
% cites this mechanism from (Golomb and Amatai, 1997).
%
% - References:
%     - Benita, J. M., Guillamon, A., Deco, G., & Sanchez-Vives, M. V. (2012).
%     Synaptic depression and slow oscillatory activity in a biophysical
%     network model of the cerebral cortex. Frontiers in Computational
%     Neuroscience, 6. https://doi.org/10.3389/fncom.2012.00064
%     - TODO
%
% - Tags: potassium, current, intrinsic, pyramidal, soma
%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%
% Parameters
gA = 1 % mS/cm^2
EA = -100 % mV, same as potassium reversal potential

tauH = 15 % ms
phi = 1 % temperature factor
hAIC = 0
hANoiseIC = 1

% Functions
Minf(X) = 1./(1 - exp(-(X+50)./20))
Hinf(X) = 1./(1 + exp((X+80)./6))

IA_PYso_B12(X,hA) = -gA.*Minf(X).^3.*hA.*(X-EA)

monitor IA_PYso_B12

% ODEs and ICs
hA' = phi.*(Hinf(X) - hA)./tauH
hA(0)=hAIC+hANoiseIC.*rand(1, Npop)

% Interface
@current += IA_PYso_B12(X,hA)
