% # iCOM_PYso_PYdr_B12:
%
% Simple ohmic axial current for connecting FROM PY cell dendrite compartments
% TO PY cell axo-somatic compartments PYso<-PYdr_B12 used in the DynaSim
% implementation of (Benita et al., 2012). Note that in the original code, this
% cell type is called CX, and the compartments are called CX_DEND or CX_SOMA.
%
% - References:
%     - Benita, J. M., Guillamon, A., Deco, G., & Sanchez-Vives, M. V. (2012).
%     Synaptic depression and slow oscillatory activity in a biophysical
%     network model of the cerebral cortex. Frontiers in Computational
%     Neuroscience, 6. https://doi.org/10.3389/fncom.2012.00064
%
% - Tags: current, pyramidal, dendrite, soma
%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%
% Parameters
% For the compartmental conductance going to the dendrites, need to divide the
% the total current, 1.75 +- 0.1 uS, by 'A_d', the area of the dendrite, in
% order to get a per-area conductance, which is what DynaSim prefers.
%
% 1.75 uS / 0.015 mm^2 * ...
% 1 mS / 1000 uS * ...
% 100 mm^2 / 1 cm^2 = ...
% 11.667 mS/cm^2
gCOM=11.667

% Functions
% Note that this is the same as -gCOM * (Vso - Vdr)
% AES
% wtf there seems to be a difference between these two???
ICOM_PYso_PYdr_B12(IN,OUT) = -gCOM.*(OUT-IN)
% ICOM_PYso_PYdr_B12(IN,OUT) = gCOM.*(IN-OUT)
% ICOM_PYso_PYdr_B12(X1,X2) = gCOM.*(X1-X2)

% Linkers
% @current += ICOM_PYso_PYdr_B12(X_pre,X_post)
@current += ICOM_PYso_PYdr_B12(IN,OUT)
